PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = icelandic
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      text [set every repeat] = u'Segðu ' + $lex + ' aftur.'
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.5
      font = FreeSans
      letterHeight = 0.15
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = words.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'cond_no': 1, 'cons': u'\u02b0k', 'eng': u'cook', 'pos': u'n', 'syl': u'cvcc', 'vow': u'o', 'place': u'velar', 'manner': u'stop', 'context': u'cc', 'lex': u'kokk', 'ph': u'k\u02b0o\u02b0k', 'asp': u'yes'},
      {'cond_no': 2, 'cons': u'kk', 'eng': u'beak', 'pos': u'n', 'syl': u'cvcc', 'vow': u'o', 'place': u'velar', 'manner': u'stop', 'context': u'cc', 'lex': u'gogg', 'ph': u'kokk', 'asp': u'no'},
      {'cond_no': 3, 'cons': u'\u02b0k', 'eng': u'dark', 'pos': u'agg', 'syl': u'cvcc', 'vow': u'\u0153', 'place': u'velar', 'manner': u'stop', 'context': u'cc', 'lex': u'd\xf6kk', 'ph': u't\u0153\u02b0k', 'asp': u'yes'},
      {'cond_no': 4, 'cons': u'kk', 'eng': u'dew', 'pos': u'n', 'syl': u'cvcc', 'vow': u'\u0153', 'place': u'velar', 'manner': u'stop', 'context': u'cc', 'lex': u'd\xf6gg', 'ph': u't\u0153kk', 'asp': u'no'},
      {'cond_no': 5, 'cons': u'\u02b0p', 'eng': u'chamber pot', 'pos': u'n', 'syl': u'cvcc', 'vow': u'o', 'place': u'labial', 'manner': u'stop', 'context': u'cc', 'lex': u'kopp', 'ph': u'k\u02b0o\u02b0p', 'asp': u'yes'},
      {'cond_no': 6, 'cons': u'pp', 'eng': u'block of wood', 'pos': u'n', 'syl': u'cvcc', 'vow': u'\u028f', 'place': u'labial', 'manner': u'stop', 'context': u'cc', 'lex': u'kubb', 'ph': u'k\u02b0\u028fpp', 'asp': u'no'},
      {'cond_no': 7, 'cons': u'\u02b0t', 'eng': u'far and wide', 'pos': u'adv', 'syl': u'cvcc', 'vow': u'i', 'place': u'coronal', 'manner': u'stop', 'context': u'cc', 'lex': u'v\xedtt', 'ph': u'vi\u02b0t', 'asp': u'yes'}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
    Routine trial
  LoopTerminator trials
